PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = SpotSymbols
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent QuestionSeeker
      image [set every repeat] = $i_ques
      size = (720, 405)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      units = pix
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    ImageComponent ResponseSeeker
      image [set every repeat] = $i_res
      size = (720, 405)
      startVal [time (s)] = 3.5
      units = pix
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '0','1','2','3','4','5','6'
      correctAns = $i_ans
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 3.75
      storeCorrect = True
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    CodeComponent scorecount
      Code Type = Auto->JS
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      Before Experiment:
        points=0
      End Routine:
        if key_resp.corr:
            points+=1
        thisExp.addData('score',points)
  Routine WelcomeScreen
    TextComponent Welcometext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to Mannan's Symbols Experiment

        There will be 20 images displayed. Answer the questions that follow. You have to match the common symbols between the displayed cards.

        Press 'space' to continue.
    KeyboardComponent key_resp_to_begin
      allowedKeys = 'y','n','left','right','space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine buffer
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine EndScreen
    TextComponent Byebye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking the experiment!
        Your responses have been recorded.

        I tried figuring out a way to display your score... but I failed- sorry about that :(

        Please press 'space' to leave the experiment.
    KeyboardComponent ExitKey
      allowedKeys = 'y','n','left','right','space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine WelcomeScreen
  Routine buffer
  LoopInitiator iterations loopType="TrialHandler"
    conditionsFile = Iterations.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'i_ques': 'Questions/Slide2.png', 'i_res': 'Responses/Slide3.png', 'i_ans': 2},
      {'i_ques': 'Questions/Slide4.png', 'i_res': 'Responses/Slide5.png', 'i_ans': 4}]
    Routine trial
    Routine buffer
  LoopTerminator iterations
  Routine EndScreen
